OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)

Acquisition client => #0
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#0.Signal stream -> TCP Writer
  Port = 5670
  Output format = Raw

Channel Selector "3" => #2
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
Input stream=#2 -> CSV File Writer
  Filename = C:/Users/Johann/Documents/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false

Channel Selector "3" => #4
  Channel List = 3
  Action = Select
  Channel Matching Method = Index
-> Time based epoching
  Epoch duration (in sec) = 3.000000
  Epoch intervals (in sec) = 0.100000
-> Signal average
-> Signal Resampling => #7
  New Sampling Frequency = 512
  Sample Count Per Buffer = 4
  Low Pass Filter Signal Before Downsampling = false
Input 1=#4, Input 2=#7 -> Signal Merger
Input signal 1=#4, Input signal 2=#7 -> Signal Concatenation
  Time out before assuming end-of-file (in sec) = 5
  End-of-file stimulation for input 1 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 2 = OVTK_StimulationId_ExperimentStop

Channel Selector "2"
  Channel List = 2
  Action = Select
  Channel Matching Method = Index

Channel Selector "!3"
  Channel List = 3
  Action = Reject
  Channel Matching Method = Index
